PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = BT1_Psychopy
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Intermission
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    TextComponent Transition_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = We will know begin the actual trial sessions for the experiments. Press space when you are ready to continue.
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    KeyboardComponent Transition_Key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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  Routine Rest
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  Routine rest
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    TextComponent Rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Rest your eyes as long as you need.
        Press space when you are ready to continue.
    KeyboardComponent Rest_Key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_Session
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    SoundComponent RT_EC
      forceEndRoutine = False
      sound [set every repeat] = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/beep-07a.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent RT_EO
      forceEndRoutine = False
      sound [set every repeat] = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/beep-07a.mp3
      startVal [time (s)] = 17.0
      stopVal [duration (s)] = 1.0
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    ImageComponent RT_Dot_EC
      image = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/Black_Dot.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.0
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    ImageComponent RT_Dot_EO
      image = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/Black_Dot.png
      size = (0.1, 0.1)
      startVal [time (s)] = 17.0
      stopVal [duration (s)] = 17.0
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  Routine Practice_Session
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    ImageComponent PT_Dot_EC
      image = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/Black_Dot.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 17.0
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    SoundComponent PT_EC_S1
      forceEndRoutine = False
      sound [set every repeat] = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/beep-07a.mp3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    ImageComponent PT_Dot_EO
      image = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/Black_Dot.png
      size = (0.1, 0.1)
      startVal [time (s)] = 17.0
      stopVal [duration (s)] = 17.0
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    SoundComponent PT_EO_S2
      forceEndRoutine = False
      sound [set every repeat] = /Users/tonysaldana/Downloads/Neurotech 25-26/Beginner Project/beep-07a.mp3
      startVal [time (s)] = 17.0
      stopVal [duration (s)] = 1.0
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  Routine Introduction
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    TextComponent Introduction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25.0
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      text:
        In the following Experiement you will be opening and closing your eyes. When you hear the noise you will close your eyes and when you hear it again you will open them.
        To begin, put yourself in a relaxed state.
        Try to remain still and not clench your jaw.
        Try not to blink during the experiment
    TextComponent Jaw_Clench_Text
      letterHeight = 0.05
      startVal [time (s)] = 25.0
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      text:
        We will now do a jaw clench to align the data.
        When you see the triangle on the screen clench your jaw. We will do this three times.
        When you are ready to start press space.
    KeyboardComponent Intro_Key_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 25.0
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  Routine JawClench_Alignment
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    TextComponent Get_Ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5.0
      text = Get Ready
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    PolygonComponent Jaw_Clench
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [time (s)] = 9.0
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    PolygonComponent Jaw_Clench_2
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 11.0
      stopVal [time (s)] = 15.0
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    PolygonComponent Jaw_Clench_3
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 17.0
      stopVal [time (s)] = 21.0
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    TextComponent Practice_Trial_Text
      letterHeight = 0.05
      startVal [time (s)] = 23.0
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      text:
        We will now begin the practice session.
        You will focus on the dot in the middle.
        You will close your eyes first, so once you press space you will hear a beep to close your eyes. When you hear a beep again, you open your eyes.
        You will do this four times, so four beeps.
        To begin the practice session press the space bar.
    KeyboardComponent Transition_to_Practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 23.0
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Flow
  Routine Introduction
  Routine JawClench_Alignment
  LoopInitiator Practice_Loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Practice_Session
  LoopTerminator Practice_Loop
  Routine Intermission
  LoopInitiator Block_Loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator Trial_Loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Trial_Session
    LoopTerminator Trial_Loop
    Routine rest
  LoopTerminator Block_Loop
